OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename => #1
  New channel names = F7;F4;F8;T7;C4;T8;TP9;TP10;Pz;P8
-> Python 3 scripting => #2
  Clock frequency (Hz) = 64
  Script = C:/Users/fmri/Desktop/Doors Experiment/main.py
Input stream=#2.New output, Stimulations stream=#2.New output(1) -> CSV File Writer
  Filename = C:/Users/fmri/Desktop/Doors Experiment/Data/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
